<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>horGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Textures\horGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>plaid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Textures\plaid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>vertGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Textures\vertGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>20</Y>
          <Z>0</Z>
        </Light>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ViewMatrix</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentPosition</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="X" Selector="X" />
          <Property Name="Y" Selector="Y" />
          <Property Name="Z" Selector="Z" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Translate">
          <gl:Order>Append</gl:Order>
          <gl:X>-1.0661267</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Z>3.8023057</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Rotation</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RotateAxisAngle">
          <gl:Order>Append</gl:Order>
          <gl:Axis>
            <gl:X>0</gl:X>
            <gl:Y>1</gl:Y>
            <gl:Z>0</gl:Z>
          </gl:Axis>
          <gl:Angle>1.1920929E-07</gl:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Light</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1 as ViewMatrix,
it.Item2 as ProjectionMatrix,
it.Item3 as Light)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrontView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RightView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>-90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.25</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BackView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>180.00000500895632</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LeftView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>30</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.75</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>horGrat</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>-1</TranslationY>
        <TranslationZ>-10</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>90</RotationX>
        <ScaleX>20</ScaleX>
        <ScaleY>20</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>plaid</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-10</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>5</ScaleX>
        <ScaleY>20</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentPosition</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateQuaternionRotation">
          <gl:Rotation>
            <gl:Xyz>
              <gl:X>0</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Z>0</gl:Z>
            </gl:Xyz>
            <gl:W>1</gl:W>
          </gl:Rotation>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentRotation</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>W</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TranslationChange</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseWheel" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RotationDelta</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RotationGain" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalculateRotation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RotationDelta</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RotationGain" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0.001</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Rotation</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>RotationChange</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RotationChange</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentRotation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RotateAxisAngle">
                <gl:Order>Append</gl:Order>
                <gl:Axis>
                  <gl:X>0</gl:X>
                  <gl:Y>1</gl:Y>
                  <gl:Z>0</gl:Z>
                </gl:Axis>
                <gl:Angle>-0.120000005</gl:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentRotation</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TranslationGain" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalculateTranslation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TranslationChange</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TranslationGain" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentRotation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.Item1.Item1 as TranslationChange,
it.Item1.Item2 as CurrentPosition,
it.Item2 as CurrentRotation
)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CurrentPosition</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CurrentRotation</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ExtractRotation">
                <gl:RowNormalize>true</gl:RowNormalize>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TranslationChange</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>-1</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="20" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="5" To="16" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="20" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>